PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop2
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome to The Stroop Test !

        Press SPACEBAR to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine STROOPtrial
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    TextComponent stroopword
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_Stroop
      allowedKeys = 'y','r','g','b'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Thanks for participating !
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 20.0
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  Routine blank500
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine Welcome
  Routine blank500
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop_Stimulus.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'type': 'congruent', 'word': 'RED', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'congruent', 'word': 'BLUE', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'congruent', 'word': 'YELLOW', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'congruent', 'word': 'GREEN', 'colour': 'green', 'correct_key': 'g'},
      {'type': 'incongruent', 'word': 'RED', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'incongruent', 'word': 'BLUE', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'incongruent', 'word': 'GREEN ', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'incongruent', 'word': 'YELLOW', 'colour': 'green', 'correct_key': 'g'}]
    Routine STROOPtrial
    Routine blank500
  LoopTerminator trials
  Routine Thanks
